PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = IDENTITY_PRIMING_FINAL
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_names
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    ImageComponent image
      image [set every repeat] = $id_test
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Click to submit
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    MouseComponent mouse
      clickable = $text_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine greeting
    TextboxComponent textbox_2
      alignment = center-right
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (0, 1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Hello and welcome!

        Please read the instructions below carefully before proceeding:

        A series of names will be shown on the screen, you have to rate your familarity with the personalities on the slider. If you are unfamiliar with the personality, press unfamiliar. In case you know the personality's name and face, press familiar.

        Click here to proceed
    MouseComponent mouse_2
      clickable = textbox_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        - A series of photos will appear on your screen.

        - You are required to identify and name the person.

        - In case you do not recognise the person, type NA and proceed by clicking the submit button.

        - Please note that this is a time sensitive task, you have limited time to type out your response.

        CLICK HERE TO PROCEED
    MouseComponent mouse_3
      clickable = $textbox_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_names.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_names': 'Volodymyr Zelensky'},
      {'study_names': 'Malala Yousafzai'},
      {'study_names': 'Bal Thackeray'},
      {'study_names': 'Justin Trudeau'},
      {'study_names': 'Mahmoud Abbas'},
      {'study_names': 'Amit Shah'}]
    Routine trial
  LoopTerminator trials
  Routine instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = id_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Asad_Owaisi.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Joe_Biden.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Mamata_Banerjee.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\putin.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Rahul_Gandhi.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Smriti_Z_Irani.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\uddhav_thackeray.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\volodymyr.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\yousafzai.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\modi.png'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\mahmoud_abbas.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Xi_Jinping.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Justin_Trudeau.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Emmanuel_Macron.jpg'},
      {'id_test': 'C:\\Users\\hp\\Documents\\LAB IN PSCYH\\Rishi_Sunak.jpg'}]
    Routine test
  LoopTerminator trials_2
