PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.1
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + "GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 50), ('future_reward', 89), ('delay', 120)]),
      OrderedDict([('reward_today', 12), ('future_reward', 26), ('delay', 25)]),
      OrderedDict([('reward_today', 36), ('future_reward', 97), ('delay', 75)]),
      OrderedDict([('reward_today', 11), ('future_reward', 23), ('delay', 12)]),
      OrderedDict([('reward_today', 3), ('future_reward', 28), ('delay', 3)]),
      OrderedDict([('reward_today', 10), ('future_reward', 28), ('delay', 5)]),
      OrderedDict([('reward_today', 11), ('future_reward', 23), ('delay', 23)]),
      OrderedDict([('reward_today', 34), ('future_reward', 234), ('delay', 123)]),
      OrderedDict([('reward_today', 45), ('future_reward', 76), ('delay', 98)]),
      OrderedDict([('reward_today', 12), ('future_reward', 34), ('delay', 30)]),
      OrderedDict([('reward_today', 66), ('future_reward', 87), ('delay', 98)]),
      OrderedDict([('reward_today', 34), ('future_reward', 67), ('delay', 89)]),
      OrderedDict([('reward_today', 34), ('future_reward', 87), ('delay', 45)])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
    Routine trial
  LoopTerminator trials
